<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Rotate</Name>
        <Description>Left - Rotate left
Right - Rotate right</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Right</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Left</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Left" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>33</harp:Address>
                <harp:PayloadType>S32</harp:PayloadType>
                <harp:Payload>-2000</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Payload" DisplayName="Right" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>33</harp:Address>
                <harp:PayloadType>S32</harp:PayloadType>
                <harp:Payload>2000</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ControlRegister</Name>
        <Description>Q - Enable motor
W - Disable motor
E - Enable analog input
R - Disable analog input
T - Enable encoder
Y - Disable encoder
U - Reset encoder</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Q</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>1</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>W</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>2</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>E</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>4</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>R</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>8</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>T</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>16</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Y</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>32</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>U</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>64</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="14" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="14" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="14" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="14" Label="Source4" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="14" Label="Source5" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="14" Label="Source6" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source7" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ImmediatePulses</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:MouseMove" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>1080</dsp:Min>
                <dsp:Max>0</dsp:Max>
                <dsp:RangeMin>-200</dsp:RangeMin>
                <dsp:RangeMax>200</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>-10</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>10</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="BitwiseAnd" />
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Address>42</harp:Address>
              <harp:PayloadType>S16</harp:PayloadType>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Space</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>StopImmediatePulses</Name>
        <Description>A - Stop pulses</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>A</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>42</harp:Address>
                <harp:PayloadType>S16</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM9</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AnalogInput-HallSensor</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>39</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>AnalogInput-HallSensor(V)</Name>
        <Description>REF = 3.3 V / 1.6
R_DIV = 15 / (15 + 24)
N_BITS = 12

[V] = (REF / 2 ^ N_BITS) / R_DIV * RegisterValue</Description>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>34</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0.001309204</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Encoder</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:FilterMessage">
                <harp:Address>38</harp:Address>
                <harp:MessageType>Event</harp:MessageType>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Type>S16</harp:Type>
              <harp:IsArray>false</harp:IsArray>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="4" Label="Source1" />
      <Edge From="1" To="4" Label="Source2" />
      <Edge From="2" To="4" Label="Source3" />
      <Edge From="3" To="4" Label="Source4" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>